graphs:
  - id: replay
    nodes:
      - id: replay
        module: preprocess.nodes.hdf5
        class: Replay
        params:
#          filename: preprocess/data/bitalino_eeg.hdf5
          filename: __FILEPATH__
          keys:
            - /raw
          speed: 100
          resync: false
      - id: pub_raw
        module: timeflux.nodes.zmq
        class: Pub
        params:
          topic: raw
      - id: sub
        module: timeflux.nodes.zmq
        class: Sub
        params:
          topics: [ raw ]
      - id: notch
        module: timeflux_dsp.nodes.filters
        class: IIRFilter
        params:
          filter_type: bandstop
          frequencies: [ 45, 55 ]
          order: 1
      - id: bandpass
        module: timeflux_dsp.nodes.filters
        class: IIRFilter
        params:
          filter_type: bandpass
          frequencies: [ 0.1, 30 ]
          order: 3
      - id: select  # no use
        module: timeflux.nodes.query
        class: LocQuery
        params:
          key: [ Fpz ]
      - id: Bands
        module: timeflux_dsp.nodes.spectral
        class: Bands
        params:
          bands: {
            "delta": [1, 4],
            "theta": [4, 8],
            "alpha": [8, 12],
            "beta": [12, 30],
            }
      - id: filter_bank
        module: timeflux_dsp.nodes.filters
        class: FilterBank
        params:
          filters:
            'delta': { frequencies: [ 1, 4 ], order: 3 }
            'theta': { frequencies: [ 5, 7 ], order: 3 }
            'alpha': { frequencies: [ 8, 12 ], order: 3 }
            'beta': { frequencies: [ 13, 20 ], order: 3 }
            'gamma': { frequencies: [ 25, 40 ], order: 3 }
          design: butter
      - id: band_powers
        module: preprocess.nodes.power
        class: Power
        params:
          length: 10
          step: 5
      - id: display
        module: timeflux.nodes.debug
        class: Display
      - id: ei
        module: preprocess.nodes.ei
        class: Engagement
        params:
          channels: [Fpz]
      - id: callback
        module: preprocess.nodes.callback
        class: Callback
        params:
          keys: [ei]
          task_id: __TASKID__

    edges:
      - source: replay:raw
        target: select
      - source: select
        target: notch
      - source: notch
        target: bandpass
      - source: bandpass
        target: filter_bank
      - source: filter_bank
        target: band_powers
      - source: band_powers
        target: ei
      - source: ei
        target: callback
    rate: 1000